# Generated by Configurator on Fri Apr 12 14:46:17 CEST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,COM7,SerialManager,COM7
Device,ZeissScope,ZeissCAN29,ZeissScope
Device,ZeissReflectorTurret,ZeissCAN29,ZeissReflectorTurret
Device,ZeissObjectiveTurret,ZeissCAN29,ZeissObjectiveTurret
Device,ZeissFocusAxis,ZeissCAN29,ZeissFocusAxis
Device,ZeissXYStage,ZeissCAN29,ZeissXYStage
Device,ZeissSidePort,ZeissCAN29,ZeissSidePort
Device,ZeissHalogenLamp,ZeissCAN29,ZeissHalogenLamp
Device,pE-800,CoolLED,pE-800
Device,Prime,PVCAM,Camera-1
Device,ZeissReflectedLightShutter,ZeissCAN29,ZeissReflectedLightShutter
Device,ZeissTransmittedLightShutter,ZeissCAN29,ZeissTransmittedLightShutter
Device,Multi Shutter,Utilities,Multi Shutter

# Pre-init settings for devices
Property,ZeissScope,AnswerTimeOut,250.0000
Property,ZeissScope,DefiniteFocusVersion,2
Property,ZeissScope,Port,COM1
Property,pE-800,Port,COM7

# Pre-init settings for COM ports
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,57600
Property,COM1,DTR,Disable
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,9600
Property,COM7,DTR,Disable
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Fast USB to Serial,Disable
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZeissFocusAxis,0

# Roles
Property,Core,Camera,Prime
Property,Core,Shutter,Multi Shutter
Property,Core,Focus,ZeissFocusAxis
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# ZeissReflectorTurret
Label,ZeissReflectorTurret,5,6- 
Label,ZeissReflectorTurret,4,5-81 DFRhC5
Label,ZeissReflectorTurret,3,4-GFP 
Label,ZeissReflectorTurret,2,3-TexasRed
Label,ZeissReflectorTurret,1,2-DAPI 
Label,ZeissReflectorTurret,0,1-60 C/Y/HR
# ZeissObjectiveTurret
Label,ZeissObjectiveTurret,5,6-C-Apochromat 63x/1.20 W Korr UV VIS IR
Label,ZeissObjectiveTurret,4,5-
Label,ZeissObjectiveTurret,3,4-
Label,ZeissObjectiveTurret,2,3-Plan-Apochromat 63x/1.40 Oil Ph 3 M27
Label,ZeissObjectiveTurret,1,2-EC Plan-Neofluar 40x/0.75 Ph 2 M27
Label,ZeissObjectiveTurret,0,1-A-Plan 10x/0.25 Ph 1
# ZeissSidePort
Label,ZeissSidePort,2,3-100%R
Label,ZeissSidePort,1,2-100%L
Label,ZeissSidePort,0,1-100%BP

# Configuration presets
# Group: Transmitted light Intensity (V)
# Preset: NewPreset
ConfigGroup,Transmitted light Intensity (V),NewPreset,ZeissHalogenLamp,Volt,2.3255


# Group: 500nm Intensity
# Preset: NewPreset
ConfigGroup,500nm Intensity,NewPreset,pE-800,IntensityD(500),0


# Group: 580nm Intensity
# Preset: NewPreset
ConfigGroup,580nm Intensity,NewPreset,pE-800,IntensityG(580),0


# Group: 435nm Intensity
# Preset: NewPreset
ConfigGroup,435nm Intensity,NewPreset,pE-800,IntensityB(435),0


# Group: Channel
# Preset: mCherry (550nm)
ConfigGroup,Channel,mCherry (550nm),ZeissReflectorTurret,Label,5-81 DFRhC5
ConfigGroup,Channel,mCherry (550nm),pE-800,Global State,1
ConfigGroup,Channel,mCherry (550nm),pE-800,SelectionA(365),0
ConfigGroup,Channel,mCherry (550nm),pE-800,SelectionB(435),0
ConfigGroup,Channel,mCherry (550nm),pE-800,SelectionC(470),0
ConfigGroup,Channel,mCherry (550nm),pE-800,SelectionD(500),0
ConfigGroup,Channel,mCherry (550nm),pE-800,SelectionE(740),0
ConfigGroup,Channel,mCherry (550nm),pE-800,SelectionF(635),0
ConfigGroup,Channel,mCherry (550nm),pE-800,SelectionG(580),0
ConfigGroup,Channel,mCherry (550nm),pE-800,SelectionH(550),1
ConfigGroup,Channel,mCherry (550nm),Multi Shutter,Physical Shutter 1,ZeissReflectedLightShutter
ConfigGroup,Channel,mCherry (550nm),Multi Shutter,Physical Shutter 2,pE-800
ConfigGroup,Channel,mCherry (550nm),Core,Shutter,Multi Shutter

# Preset: Brightfield
ConfigGroup,Channel,Brightfield,ZeissReflectorTurret,Label,5-81 DFRhC5
ConfigGroup,Channel,Brightfield,pE-800,Global State,0
ConfigGroup,Channel,Brightfield,pE-800,SelectionA(365),0
ConfigGroup,Channel,Brightfield,pE-800,SelectionB(435),0
ConfigGroup,Channel,Brightfield,pE-800,SelectionC(470),0
ConfigGroup,Channel,Brightfield,pE-800,SelectionD(500),0
ConfigGroup,Channel,Brightfield,pE-800,SelectionE(740),0
ConfigGroup,Channel,Brightfield,pE-800,SelectionF(635),0
ConfigGroup,Channel,Brightfield,pE-800,SelectionG(580),0
ConfigGroup,Channel,Brightfield,pE-800,SelectionH(550),0
ConfigGroup,Channel,Brightfield,Multi Shutter,Physical Shutter 1,ZeissReflectedLightShutter
ConfigGroup,Channel,Brightfield,Multi Shutter,Physical Shutter 2,pE-800
ConfigGroup,Channel,Brightfield,Core,Shutter,ZeissTransmittedLightShutter

# Preset: GFP_old
ConfigGroup,Channel,GFP_old,ZeissReflectorTurret,Label,4-GFP 
ConfigGroup,Channel,GFP_old,pE-800,Global State,1
ConfigGroup,Channel,GFP_old,pE-800,SelectionA(365),0
ConfigGroup,Channel,GFP_old,pE-800,SelectionB(435),0
ConfigGroup,Channel,GFP_old,pE-800,SelectionC(470),1
ConfigGroup,Channel,GFP_old,pE-800,SelectionD(500),0
ConfigGroup,Channel,GFP_old,pE-800,SelectionE(740),0
ConfigGroup,Channel,GFP_old,pE-800,SelectionF(635),0
ConfigGroup,Channel,GFP_old,pE-800,SelectionG(580),0
ConfigGroup,Channel,GFP_old,pE-800,SelectionH(550),0
ConfigGroup,Channel,GFP_old,Multi Shutter,Physical Shutter 1,ZeissReflectedLightShutter
ConfigGroup,Channel,GFP_old,Multi Shutter,Physical Shutter 2,pE-800
ConfigGroup,Channel,GFP_old,Core,Shutter,Multi Shutter

# Preset: Cy5 (635nm)
ConfigGroup,Channel,Cy5 (635nm),ZeissReflectorTurret,Label,5-81 DFRhC5
ConfigGroup,Channel,Cy5 (635nm),pE-800,Global State,1
ConfigGroup,Channel,Cy5 (635nm),pE-800,SelectionA(365),0
ConfigGroup,Channel,Cy5 (635nm),pE-800,SelectionB(435),0
ConfigGroup,Channel,Cy5 (635nm),pE-800,SelectionC(470),0
ConfigGroup,Channel,Cy5 (635nm),pE-800,SelectionD(500),0
ConfigGroup,Channel,Cy5 (635nm),pE-800,SelectionE(740),0
ConfigGroup,Channel,Cy5 (635nm),pE-800,SelectionF(635),1
ConfigGroup,Channel,Cy5 (635nm),pE-800,SelectionG(580),0
ConfigGroup,Channel,Cy5 (635nm),pE-800,SelectionH(550),0
ConfigGroup,Channel,Cy5 (635nm),Multi Shutter,Physical Shutter 1,ZeissReflectedLightShutter
ConfigGroup,Channel,Cy5 (635nm),Multi Shutter,Physical Shutter 2,pE-800
ConfigGroup,Channel,Cy5 (635nm),Core,Shutter,Multi Shutter

# Preset: CFP (435nm)
ConfigGroup,Channel,CFP (435nm),pE-800,Global State,1
ConfigGroup,Channel,CFP (435nm),pE-800,SelectionA(365),0
ConfigGroup,Channel,CFP (435nm),pE-800,SelectionB(435),1
ConfigGroup,Channel,CFP (435nm),pE-800,SelectionC(470),0
ConfigGroup,Channel,CFP (435nm),pE-800,SelectionD(500),0
ConfigGroup,Channel,CFP (435nm),pE-800,SelectionE(740),0
ConfigGroup,Channel,CFP (435nm),pE-800,SelectionF(635),0
ConfigGroup,Channel,CFP (435nm),pE-800,SelectionG(580),0
ConfigGroup,Channel,CFP (435nm),pE-800,SelectionH(550),0
ConfigGroup,Channel,CFP (435nm),Multi Shutter,Physical Shutter 1,ZeissReflectedLightShutter
ConfigGroup,Channel,CFP (435nm),Multi Shutter,Physical Shutter 2,pE-800
ConfigGroup,Channel,CFP (435nm),Core,Shutter,Multi Shutter
ConfigGroup,Channel,CFP (435nm),ZeissReflectorTurret,Label,1-60 C/Y/HR

# Preset: GFP (470nm)
ConfigGroup,Channel,GFP (470nm),pE-800,Global State,1
ConfigGroup,Channel,GFP (470nm),pE-800,SelectionA(365),0
ConfigGroup,Channel,GFP (470nm),pE-800,SelectionB(435),0
ConfigGroup,Channel,GFP (470nm),pE-800,SelectionC(470),1
ConfigGroup,Channel,GFP (470nm),pE-800,SelectionD(500),0
ConfigGroup,Channel,GFP (470nm),pE-800,SelectionE(740),0
ConfigGroup,Channel,GFP (470nm),pE-800,SelectionF(635),0
ConfigGroup,Channel,GFP (470nm),pE-800,SelectionG(580),0
ConfigGroup,Channel,GFP (470nm),pE-800,SelectionH(550),0
ConfigGroup,Channel,GFP (470nm),Multi Shutter,Physical Shutter 1,ZeissReflectedLightShutter
ConfigGroup,Channel,GFP (470nm),Multi Shutter,Physical Shutter 2,pE-800
ConfigGroup,Channel,GFP (470nm),Core,Shutter,Multi Shutter
ConfigGroup,Channel,GFP (470nm),ZeissReflectorTurret,Label,5-81 DFRhC5

# Preset: TexasRed_old
ConfigGroup,Channel,TexasRed_old,ZeissReflectorTurret,Label,3-TexasRed
ConfigGroup,Channel,TexasRed_old,pE-800,Global State,1
ConfigGroup,Channel,TexasRed_old,pE-800,SelectionA(365),0
ConfigGroup,Channel,TexasRed_old,pE-800,SelectionB(435),0
ConfigGroup,Channel,TexasRed_old,pE-800,SelectionC(470),0
ConfigGroup,Channel,TexasRed_old,pE-800,SelectionD(500),0
ConfigGroup,Channel,TexasRed_old,pE-800,SelectionE(740),0
ConfigGroup,Channel,TexasRed_old,pE-800,SelectionF(635),0
ConfigGroup,Channel,TexasRed_old,pE-800,SelectionG(580),0
ConfigGroup,Channel,TexasRed_old,pE-800,SelectionH(550),1
ConfigGroup,Channel,TexasRed_old,Multi Shutter,Physical Shutter 1,ZeissReflectedLightShutter
ConfigGroup,Channel,TexasRed_old,Multi Shutter,Physical Shutter 2,pE-800
ConfigGroup,Channel,TexasRed_old,Core,Shutter,Multi Shutter

# Preset: DAPI_old
ConfigGroup,Channel,DAPI_old,ZeissReflectorTurret,Label,2-DAPI 
ConfigGroup,Channel,DAPI_old,pE-800,Global State,1
ConfigGroup,Channel,DAPI_old,pE-800,SelectionA(365),1
ConfigGroup,Channel,DAPI_old,pE-800,SelectionB(435),0
ConfigGroup,Channel,DAPI_old,pE-800,SelectionC(470),0
ConfigGroup,Channel,DAPI_old,pE-800,SelectionD(500),0
ConfigGroup,Channel,DAPI_old,pE-800,SelectionE(740),0
ConfigGroup,Channel,DAPI_old,pE-800,SelectionF(635),0
ConfigGroup,Channel,DAPI_old,pE-800,SelectionG(580),0
ConfigGroup,Channel,DAPI_old,pE-800,SelectionH(550),0
ConfigGroup,Channel,DAPI_old,Multi Shutter,Physical Shutter 1,ZeissReflectedLightShutter
ConfigGroup,Channel,DAPI_old,Multi Shutter,Physical Shutter 2,pE-800
ConfigGroup,Channel,DAPI_old,Core,Shutter,Multi Shutter

# Preset: RFP (580nm)
ConfigGroup,Channel,RFP (580nm),ZeissReflectorTurret,Label,1-60 C/Y/HR
ConfigGroup,Channel,RFP (580nm),pE-800,Global State,1
ConfigGroup,Channel,RFP (580nm),pE-800,SelectionA(365),0
ConfigGroup,Channel,RFP (580nm),pE-800,SelectionB(435),0
ConfigGroup,Channel,RFP (580nm),pE-800,SelectionC(470),0
ConfigGroup,Channel,RFP (580nm),pE-800,SelectionD(500),0
ConfigGroup,Channel,RFP (580nm),pE-800,SelectionE(740),0
ConfigGroup,Channel,RFP (580nm),pE-800,SelectionF(635),0
ConfigGroup,Channel,RFP (580nm),pE-800,SelectionG(580),1
ConfigGroup,Channel,RFP (580nm),pE-800,SelectionH(550),0
ConfigGroup,Channel,RFP (580nm),Multi Shutter,Physical Shutter 1,ZeissReflectedLightShutter
ConfigGroup,Channel,RFP (580nm),Multi Shutter,Physical Shutter 2,pE-800
ConfigGroup,Channel,RFP (580nm),Core,Shutter,Multi Shutter

# Preset: Cy7 (740nm)
ConfigGroup,Channel,Cy7 (740nm),ZeissReflectorTurret,Label,1-60 C/Y/HR
ConfigGroup,Channel,Cy7 (740nm),pE-800,Global State,1
ConfigGroup,Channel,Cy7 (740nm),pE-800,SelectionA(365),0
ConfigGroup,Channel,Cy7 (740nm),pE-800,SelectionB(435),0
ConfigGroup,Channel,Cy7 (740nm),pE-800,SelectionC(470),0
ConfigGroup,Channel,Cy7 (740nm),pE-800,SelectionD(500),0
ConfigGroup,Channel,Cy7 (740nm),pE-800,SelectionE(740),1
ConfigGroup,Channel,Cy7 (740nm),pE-800,SelectionF(635),0
ConfigGroup,Channel,Cy7 (740nm),pE-800,SelectionG(580),0
ConfigGroup,Channel,Cy7 (740nm),pE-800,SelectionH(550),0
ConfigGroup,Channel,Cy7 (740nm),Multi Shutter,Physical Shutter 1,ZeissReflectedLightShutter
ConfigGroup,Channel,Cy7 (740nm),Multi Shutter,Physical Shutter 2,pE-800
ConfigGroup,Channel,Cy7 (740nm),Core,Shutter,Multi Shutter

# Preset: YFP (500nm)
ConfigGroup,Channel,YFP (500nm),ZeissReflectorTurret,Label,1-60 C/Y/HR
ConfigGroup,Channel,YFP (500nm),pE-800,Global State,1
ConfigGroup,Channel,YFP (500nm),pE-800,SelectionA(365),0
ConfigGroup,Channel,YFP (500nm),pE-800,SelectionB(435),0
ConfigGroup,Channel,YFP (500nm),pE-800,SelectionC(470),0
ConfigGroup,Channel,YFP (500nm),pE-800,SelectionD(500),1
ConfigGroup,Channel,YFP (500nm),pE-800,SelectionE(740),0
ConfigGroup,Channel,YFP (500nm),pE-800,SelectionF(635),0
ConfigGroup,Channel,YFP (500nm),pE-800,SelectionG(580),0
ConfigGroup,Channel,YFP (500nm),pE-800,SelectionH(550),0
ConfigGroup,Channel,YFP (500nm),Multi Shutter,Physical Shutter 1,ZeissReflectedLightShutter
ConfigGroup,Channel,YFP (500nm),Multi Shutter,Physical Shutter 2,pE-800
ConfigGroup,Channel,YFP (500nm),Core,Shutter,Multi Shutter

# Preset: DAPI (365nm)
ConfigGroup,Channel,DAPI (365nm),pE-800,Global State,1
ConfigGroup,Channel,DAPI (365nm),pE-800,SelectionA(365),1
ConfigGroup,Channel,DAPI (365nm),pE-800,SelectionB(435),0
ConfigGroup,Channel,DAPI (365nm),pE-800,SelectionC(470),0
ConfigGroup,Channel,DAPI (365nm),pE-800,SelectionD(500),0
ConfigGroup,Channel,DAPI (365nm),pE-800,SelectionE(740),0
ConfigGroup,Channel,DAPI (365nm),pE-800,SelectionF(635),0
ConfigGroup,Channel,DAPI (365nm),pE-800,SelectionG(580),0
ConfigGroup,Channel,DAPI (365nm),pE-800,SelectionH(550),0
ConfigGroup,Channel,DAPI (365nm),Multi Shutter,Physical Shutter 1,ZeissReflectedLightShutter
ConfigGroup,Channel,DAPI (365nm),Multi Shutter,Physical Shutter 2,pE-800
ConfigGroup,Channel,DAPI (365nm),Core,Shutter,Multi Shutter
ConfigGroup,Channel,DAPI (365nm),ZeissReflectorTurret,Label,5-81 DFRhC5

# Preset: SOX
ConfigGroup,Channel,SOX,pE-800,Global State,1
ConfigGroup,Channel,SOX,pE-800,SelectionA(365),0
ConfigGroup,Channel,SOX,pE-800,SelectionB(435),0
ConfigGroup,Channel,SOX,pE-800,SelectionC(470),1
ConfigGroup,Channel,SOX,pE-800,SelectionD(500),0
ConfigGroup,Channel,SOX,pE-800,SelectionE(740),0
ConfigGroup,Channel,SOX,pE-800,SelectionF(635),0
ConfigGroup,Channel,SOX,pE-800,SelectionG(580),0
ConfigGroup,Channel,SOX,pE-800,SelectionH(550),0
ConfigGroup,Channel,SOX,Multi Shutter,Physical Shutter 1,ZeissReflectedLightShutter
ConfigGroup,Channel,SOX,Multi Shutter,Physical Shutter 2,pE-800
ConfigGroup,Channel,SOX,Core,Shutter,Multi Shutter
ConfigGroup,Channel,SOX,ZeissReflectorTurret,Label,5-81 DFRhC5

# Group: System
# Preset: Startup


# Group: Objective
# Preset: 3-Plan-Apochromat 63x-1.40 Oil Ph 3 M27
ConfigGroup,Objective,3-Plan-Apochromat 63x-1.40 Oil Ph 3 M27,ZeissObjectiveTurret,Label,3-Plan-Apochromat 63x/1.40 Oil Ph 3 M27

# Preset: 4-
ConfigGroup,Objective,4-,ZeissObjectiveTurret,Label,4-

# Preset: 5-
ConfigGroup,Objective,5-,ZeissObjectiveTurret,Label,5-

# Preset: 6-C-Apochromat 63x-1.20 W Korr UV VIS IR
ConfigGroup,Objective,6-C-Apochromat 63x-1.20 W Korr UV VIS IR,ZeissObjectiveTurret,Label,6-C-Apochromat 63x/1.20 W Korr UV VIS IR

# Preset: 2-EC Plan-Neofluar 40x-0.75 Ph 2 M27
ConfigGroup,Objective,2-EC Plan-Neofluar 40x-0.75 Ph 2 M27,ZeissObjectiveTurret,Label,2-EC Plan-Neofluar 40x/0.75 Ph 2 M27

# Preset: 1-A-Plan 10x-0.25 Ph 1
ConfigGroup,Objective,1-A-Plan 10x-0.25 Ph 1,ZeissObjectiveTurret,Label,1-A-Plan 10x/0.25 Ph 1


# Group: 550nm Intensity
# Preset: NewPreset
ConfigGroup,550nm Intensity,NewPreset,pE-800,IntensityH(550),0


# Group: 740nm Intensity
# Preset: NewPreset
ConfigGroup,740nm Intensity,NewPreset,pE-800,IntensityE(740),0


# Group: 470nm Intensity
# Preset: NewPreset
ConfigGroup,470nm Intensity,NewPreset,pE-800,IntensityC(470),0


# Group: 635nm Intensity
# Preset: NewPreset
ConfigGroup,635nm Intensity,NewPreset,pE-800,IntensityF(635),0


# Group: 365nm Intensity
# Preset: NewPreset
ConfigGroup,365nm Intensity,NewPreset,pE-800,IntensityA(365),0



# PixelSize settings
# Resolution preset: 63x
ConfigPixelSize,63x,ZeissObjectiveTurret,Label,3-Plan-Apochromat 63x/1.40 Oil Ph 3 M27
PixelSize_um,63x,0.103
PixelSizeAffine,63x,0.103,0.0,0.0,0.0,0.103,0.0
# Resolution preset: 63x W
ConfigPixelSize,63x W,ZeissObjectiveTurret,Label,6-C-Apochromat 63x/1.20 W Korr UV VIS IR
PixelSize_um,63x W,0.103
PixelSizeAffine,63x W,0.103,0.0,0.0,0.0,0.103,0.0
# Resolution preset: 40x
ConfigPixelSize,40x,ZeissObjectiveTurret,Label,2-EC Plan-Neofluar 40x/0.75 Ph 2 M27
PixelSize_um,40x,0.1625
PixelSizeAffine,40x,0.1625,0.0,0.0,0.0,0.1625,0.0
# Resolution preset: 10x
ConfigPixelSize,10x,ZeissObjectiveTurret,Label,1-A-Plan 10x/0.25 Ph 1
PixelSize_um,10x,0.65
PixelSizeAffine,10x,0.65,0.0,0.0,0.0,0.65,0.0

